OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.4.0)

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

0x341d3912 Generic stream reader => #1
  Filename = C:/Users/pipo_/OneDrive/Drive_F/00_Nueron_maze/BCI_neuro_media/data_pipo_try/task1
Data=#1.Output stream 2, Stimulations=#1.Output stream 3 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#1.Output stream 2, Stimulations=#1.Output stream 3 -> 0x341d3912 EDF File Writer
  Filename = C:/Users/pipo_/OneDrive/Drive_F/00_Nueron_maze/BCI_neuro_media/data_pipo_try/muse_edf

0x341d3912 Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
